---
API: 2.1
OpenSesame: 3.3.9
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\vb\\Documents\\KempHemProject\\SEIN"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#ffffff"

define inline_script DefineFunctions
	set description "Executes Python code"
	set _run ""
	___prepare__
	### Import all packages
	import serial
	import random
	from psychopy import core
	from psychopy.hardware import keyboard
	from pygaze import settings
	
	settings.TRACKERSERIALNUMBER = 'TPNA1-030220933472' #number of ET
	
	trialClock = core.Clock()
	kb = keyboard.Keyboard()
	triggerClock = core.Clock()
	XboxClock = core.Clock()
	### Define all the functions 
	
	def reset():
	    var.responseKey1 = None
	    var.responseTime1 = 0
	    trialClock.reset()
	    kb.clock.reset()
	
	def drawCorner(): #differ for fixation cross position 
	    ImgBackBack.draw()
	    ImgEmoji1.pos=(random.choice([850,-850]), random.choice([475,-475]))
	    ImgEmoji1.draw()
	    #time.sleep(1.5)
	    win.flip()
	
	def drawCorner1(): 
	    ImgBackBack.draw()
	    #ImgEmojies.pos=(var.x_pos1,var.y_pos1)
	    ImgEmojies.draw()
	    #time.sleep(1.5)
	    win.flip()
	
	def drawCue_right():
	    ImgBackBack.draw()
	    #fixationCross1.draw() 
	    Cueright.draw()
	    win.flip()
	
	def drawCue_wrong():
	    ImgBackBack.draw()
	    #fixationCross1.draw() 
	    Cuewrong.draw()
	    win.flip()
	    
	def drawbackground():
	    ImgBackBack.draw()
	    fixationCross1.draw()    
	    win.flip()
	
	def drawbackground1():
	    ImgBackBack.draw()
	    fixationCross1.draw()    
	    win.flip()
	    
	def calibration_os():
	    ImgBackBack.draw()
	    DistractorCircle.draw()
	    win.flip()
	    
	def good_resp(resRt, Ac):
	    draw_after()
	    TextStim1.draw()
	    win.flip() 
	    #Has responded so +1
	    resRt +=1
	    #Responded correctly so +1
	    Ac +=1
	    clock.sleep(1000)
	    return resRt, Ac
	    
	def false_resp(resRt):
	    draw_after()
	    TextStim2.draw()
	    win.flip()  
	    resRt +=1
	    clock.sleep(1000)
	    return resRt
	    
	def no_resp():
	    draw_after()
	    TextStim3.draw()
	    win.flip()
	    clock.sleep(1000)
	    
	def logging():
	    var.responsetimeAverage = round((var.responsetimeAverage/var.trial_cnt)*1000)
	    var.accu = round((var.accu/var.trial_cnt)*100)
	    var.resRate = var.resRate/var.trial_cnt
	    
	################################################
	### Serial trigger functions ###
	def SerTrigger():
	    # trigger for SAGA
	   # exp.ser.write(b'gpio set 1\n\r')
	   # clock.sleep(300)
	   # exp.ser.write(b'gpio clear 1\n\r')
	    #trigger 2 (tuple cable)
	    exp.ser.write(b'gpio set 2\n\r')
	    clock.sleep(300)
	    exp.ser.write(b'gpio clear 2\n\r')
	__end__

define inline_script DefineStimuli
	set description "Executes Python code"
	set _run ""
	___prepare__
	from psychopy import visual, sound
	import random
	
	
	
	###Define all the images
	
	path = "path\to\Images\folder"
	#Define image variables
	
	
	ImgBackBack = visual.ImageStim(win,
	                          image=path+"blackback.png",
	                          pos=(0,0),
	                          size=(1920,1080),
	                          units="pix" )
	
	ImgEmoji1 = visual.ImageStim(win,
	                           image=path+"emoji.png",
	                          # pos_x = [850,-850],
	                          # pos_y = [475,-475],
	                           pos = (0,0),
	                           size=(150,100),
	                           units="pix" )
	
	
	### define distractor 
	DistractorCircle = visual.Circle(win,
	    units="pix",
	    radius=2*20,
	    fillColor="red",
	    pos = (800,85))
	[var.wcue_xpos,var.wcue_ypos, var.cue_xpos,var.cue_ypos] = (0,0,0,0)
	Cuewrong = visual.Circle(win,
	    units="pix",
	    radius=1*20,
	    fillColor="white",
	    pos = (var.wcue_xpos,var.wcue_ypos),
	    size=(1,1))
	
	Cueright = visual.Circle(win,
	    units="pix",
	    radius=1*20,
	    fillColor="white",
	    pos = (var.cue_xpos,var.cue_ypos),
	    size=(1,1))
	
	
	Cue1= visual.ShapeStim(win, 
	    vertices=((0, -30), (0,-15), (0, 30), (0,0), (-30,0), (-15,0), (30, 0)),
	    pos = (0,0),
	    size=(0.8,0.8),
	    ori = 35.0,
	    lineWidth=10,
	    closeShape=False,
	    lineColor="white")
	
	fixationCross = visual.ShapeStim(win, 
	    vertices=((0, -30), (0, 30), (0,0), (-30,0), (30, 0)),
	    pos = (0,-450),
	    lineWidth=10,
	    closeShape=False,
	    lineColor="orange")
	
	fixationCross1 = visual.ShapeStim(win, 
	    vertices=((0, -30), (0, 30), (0,0), (-30,0), (30, 0)),
	    pos = (0,0),
	    lineWidth=10,
	    closeShape=False,
	    lineColor="orange")
	
	
	##############################################################
	
	### Define all the text that is used for feedback.
	#Define all Feedback texts
	TextStim1 = visual.TextStim(win,
	                            text='Goed zo!',
	                            color='green',
	                            pos=(400,-256),
	                            height=44,
	                            font='Calibri')
	
	TextStim2 = visual.TextStim(win,
	                            text='Jammer!',
	                            color='red',
	                            pos=(400,-256),
	                            height=44,
	                            font='Calibri')
	
	TextStim3 = visual.TextStim(win,
	                            text='Jammer! Te laat..',
	                            color='red',
	                            pos=(0,-256),
	                            height=44,
	                            font='Calibri')
	
	########################################################
	__end__

define inline_script Documentation
	set description "Executes Python code"
	set _run ""
	___prepare__
	'''
	IF PORT DOES NOT WORK -->
	go to device manage --> universal serial bus controllers --> unistall the USB root hub --> reboot laptop
	
	OR 
	
	go to WINDOWS DEFENDER FIREWELL --> TURN ON OR OFF DEFENDER --> TURN ALL OFF AND RESTART. 
	
	or first methods here --> 
	https://www.youtube.com/watch?v=xU_ksNEFUzM
	
	IF ET IS NOT RECOGNISED THEN REINSTALL IT WITH TOBII MANAGER
	
	do not put usb stick in extra usb num 4 coz it doesnt work if u have two there.
	
	Necessary packages that needs to be installed in the site-packages folder:
	Tobii Pro SDK, get it from: http://developer.tobiipro.com/python.html
	my_cwt, get it from: https://github.com/neergaard/CWT (it is renamed from cwt to cwt, to avoid confusing with a python function that is called cwt)
	myLsl, get it from: https://github.com/labstreaminglayer/liblsl-Python (it is renamed from Lsl to myLsl)
	micmserver: This code is from Christian Herff.
	
	//===================================================================================================================================
	Overview of all segments in the game:
	StartProcedure: Tested if serial trigger is connected, connect to EEG and test if the Tobii is recognized. 
	
	ChannelSelect: Select the channels that are needed for the algorithm.
	
	welcome: a fun welcome screen for the subject.
	
	DefineAlgorithm: Functions are defined for the algorithm.
	
	DefineFunctions: All functions are defined that are used in the game, most of them involve the movement of graphics.
	
	DefineStimuli: All the images are defined, as well as the feedback sounds and text. Also, some functions are present that involve placement and size of graphics.
	
	InitTobii: This calls the system to perform an eye-tracker calibration.
	
	<--Practise_seq-->
	uitleg: Oppurtunity to explain the game/procedure to the participant.
	
	set_variables_practise: define variables for the response time etc.
	In the run section, the algortihm is started.
	
	set_variables_experiment: define variables for the response time etc for the experiment phase.
	
	<--practise_stimuli-->
	Define stimulus, placement, response time and correct response
	<--practise_trial-->
	PractiseTrial
	Prepare: Define image(size and other parameters involving movement), time to wait for this trial
	Run: Run the functions for visualizing the images etc. Get the response of the subject as well
	
	practise_logger: log all the variables to the output file.
	
	feedback_1, provide feedback to the subject about this block.
	pygaze_log_1: Log the data to the Tobii eyetracker file
	StopAlgoCalcThreshold: The algorithm is stopped and the threshold for the absence detection is calculated.
	
	<--Real_exp-->
	expl_exp: Explain to the participant that the practise round is over.
	<--define_speeds-->
	Define the time that the subject has to respond for this round.
	
	<--before_start_sequence-->
	StartAlgo: Start the absence detection
	Expl_duration: Inform the subject about the time to respond.
	set_exp_variables: Define variables, like the response time to log to the OpenSesame output
	
	<--absence_loop-->
	Define the stimuli, placement, right key to respond
	<--absence_trial-->
	PreStimuli:
	Prepare: Prepare the necessary things for this trial.
	Run: Wait for a stimuli, unless an absence is detected, then a stimuli will be presented right away.
	
	Stimuli: Stimuli is shown and response of the participant is gathered. Also, feedback will be given.
	
	pygaze_log_2: Log eye-tracker data to the Tobii output file
	
	stop_algo: Stop the absence detection
	
	feedback_2: Give feedback on how the subject performed this round
	pygaze_stop_recording: Stop recording of the eyetracker
	
	Goodbye: Thank the subject.
	'''
	__end__

define pygaze_init InitTobii
	set tracker_type Tobii
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate no
	set calbeep no
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define inline_script QuitPyGame_1
	set description "Executes Python code"
	___run__
	
	
	
	import pygame
	pygame.quit()
	win.flip()
	__end__
	set _prepare ""

define inline_script QuitPyGame_2
	set description "Executes Python code"
	___run__
	
	
	
	import pygame
	pygame.quit()
	win.flip()
	__end__
	set _prepare ""

define inline_script Recalibration_2
	set description "Executes Python code"
	___run__
	TextCal1.draw()
	win.flip()
	keysCal = kb.getKeys(['space'])
	
	while not keysCal:
	    keysCal = kb.getKeys(['space'])
	    clock.sleep(100)
	    
	key = keysCal[0]
	if key.name == 'space':
	    eyetracker.calibrate()
	__end__
	___prepare__
	from psychopy import visual
	from psychopy.hardware import keyboard
	kb = keyboard.Keyboard()
	
	
	
	TextCal1 = visual.TextStim(win,
	                          pos=(300,0),
	                          units = "pix",
	                          color='black',
	                          bold = True, 
	                          height=40,
	                          font = 'Calibri',
	                          text = 'Erst, moeten we de eyetracker kalibreren. \n Kijk naar de puntjes! \n Druk op de spatiebalk om te beginnen!')
	__end__

define inline_script StartProcedure
	set description "Executes Python code"
	___run__
	#from threading import Thread
	
	ports = serial.tools.list_ports.comports(include_links = False)
	
	if ports:
	   port = ports[0] #for some laptop it s not always the first port the right one, so you need to check first which port it is and then run it. 
	   exp.ser = serial.Serial(str(port.device))
	   exp.cleanup_functions.append(exp.ser.close) #Make sure that connection is closed when game is done
	
	
	#Look for datastreams
	#streams = resolve_stream('type', 'EEG')
	#dataIn = StreamInlet(streams[0])
	#clock.sleep(1000)
	#TextFoundEEG.draw()
	#textVerify.draw()
	#TextSer.draw()
	#win.flip()
	
	#for i in [1,2,3]:
	#    chunk, timest = dataIn.pull_chunk(max_samples = 4096, timeout = 0.0)
	#    dataBuffer.extend(chunk)
	 #   clock.sleep(500)
	    
	#db = np.array(dataBuffer)
	
	#If the signal has only zeros
	
	#if sum(abs(db[:,1])) <1:
	#    textNoEEG.draw()
	#    win.flip()
	#    clock.sleep(100000000000)
	#Signal found    
	#else: 
	
	    #TextSer.draw()
	   # TextFoundEEG.draw()
	   # textYesEEG.draw()
	#textLookTobii.draw()
	#win.flip()
	    
	#while True:
	eyetrackers = tr.find_all_eyetrackers()
	    #if len(eyetrackers) >0:
	          #  TextSer.draw()
	          #  TextFoundEEG.draw()
	          #  textYesEEG.draw()
	     #   textFoundTobii.draw()
	      #  win.flip()
	        #clock.sleep(1000)
	            #Checks are complete
	           # TextSer.draw()
	           # TextFoundEEG.draw()
	           # textYesEEG.draw()
	        #textFoundTobii.draw()
	        #Ready.draw()
	       # win.flip()
	      #  clock.sleep(2000)
	      #  break
	   # else:
	   #     clock.sleep(100)
	__end__
	___prepare__
	#from myLsl.my_plsl import StreamInlet, resolve_stream
	import numpy as np
	from psychopy import visual
	import tobii_research as tr 
	import serial
	import serial.tools.list_ports
	#import micmsvr 
	#### All Text ###
	
	dataBuffer = [] #For the BCI connection
	TextSer = visual.TextStim(win,
	                          text = 'Found serial port for trigger and found the joystick',
	                          color = 'green',
	                          pos=(0,250),
	                          height=30,
	                          font = 'Calibri')
	TextNoSer = visual.TextStim(win,
	                            text = 'Serial port or joystick not found. Check in device manager if these are found. Restart is necessary!',
	                            color = 'Red',
	                            pos = (0,250),
	                            height = 50,
	                            font = 'Calibri')
	
	TextStart = visual.TextStim(win,
	                            text = "Looking for EEG streams...",
	                            color='orange',
	                            pos=(0,200),
	                            height=30,
	                            font='Calibri')
	TextFoundEEG = visual.TextStim(win,
	                            text = "Connected, receiving data now",
	                            color='green',
	                            pos=(0,200),
	                            height=30,
	                            font='Calibri')
	
	textVerify = visual.TextStim(win,
	                            text = "Checking incoming data...",
	                            color='orange',
	                            pos=(0,150),
	                            height=30,
	                            font='Calibri')
	
	textNoEEG = visual.TextStim(win,
	                            text = "Data is only zeros. Restart needed...",
	                            color='red',
	                            pos=(0,150),
	                            height=50,
	                            font='Calibri')
	
	textYesEEG = visual.TextStim(win,
	                            text = "Data is OK. ",
	                            color='green',
	                            pos=(0,150),
	                            height=30,
	                            font='Calibri')
	textLookTobii = visual.TextStim(win,
	                            text = "Looking for Tobii... ",
	                            color='orange',
	                            pos=(0,100),
	                            height=30,
	                            font='Calibri')
	textFoundTobii = visual.TextStim(win,
	                            text = "Tobii is found!",
	                            color='green',
	                            pos=(0,100),
	                            height=30,
	                            font='Calibri')
	
	Ready = visual.TextStim(win,
	                            text = "System is ready!",
	                            color='green',
	                            pos=(0,50),
	                            height=50,
	                            font='Calibri')
	__end__

define inline_script drawbackgro
	set description "Executes Python code"
	___run__
	drawCorner1() 
	clock.sleep(3000)
	__end__
	___prepare__
	Emojiez = [path + "LeftHand.png", path + "RightHand.png"]
	
	ImgEmojies = visual.ImageStim(win,
	                           image=random.choice(Emojiez),
	                           pos=(800,250),
	                           size=(100,80),
	                           units="pix" )
	__end__

define inline_script drawmon
	set description "Executes Python code"
	___run__
	drawbackground()
	clock.sleep(1500)
	
	drawCue_right()
	clock.sleep(1500)
	
	ImgBackBack.draw()
	    #ImgEmojies.pos=(var.x_pos1,var.y_pos1)
	ImgEmojies1.draw()
	    #time.sleep(1.5)
	win.flip()
	clock.sleep(1500)
	
	
	
	    
	    
	__end__
	___prepare__
	ImgEmojies1 = visual.ImageStim(win,
	                           image=path + "emo.png",
	                           pos=(800,475),
	                           size=(100,80),
	                           units="pix" )
	
	
	
	Cueright = visual.Circle(win,
	    units="pix",
	    radius=1*20,
	    fillColor="white",
	    pos = (750,475),
	    size=(1,1))
	
	Emojiez = [path + "LeftHand.png", path + "RightHand.png"]
	
	ImgEmojies = visual.ImageStim(win,
	                           image=random.choice(Emojiez),
	                           pos=(800,475),
	                           size=(100,80),
	                           units="pix" )
	__end__

define inline_script drawstimulus
	set description "Executes Python code"
	___run__
	ImgBackBack.draw()
	    #ImgEmojies.pos=(var.x_pos1,var.y_pos1)
	ImgEmojies1.draw()
	    #time.sleep(1.5)
	win.flip()
	clock.sleep(3000)
	__end__
	___prepare__
	
	
	ImgEmojies1 = visual.ImageStim(win,
	                           image=path + "emo.png",
	                           pos=(800,250),
	                           size=(100,80),
	                           units="pix" )
	
	Cueright = visual.Circle(win,
	    units="pix",
	    radius=1*20,
	    fillColor="white",
	    pos = (750,200),
	    size=(1,1))
	__end__

define sequence exp_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run uitleg always
	run drawmon always
	run uitleg_1 always
	run setvar_practice2 always
	run practice2alertingorienting always
	run QuitPyGame_2 always
	run uitleg_2_2_1 always
	run Recalibration_2 always
	run set_variables_exp2 always
	run experiment2alertingorienting always
	run QuitPyGame_1 always
	run feedback_1_1 always
	run pygaze_log_1_5 always
	run pygaze_stop_recording always
	run goodbye always

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2 always
	run Documentation always
	run StartProcedure always
	run welcome always
	run DefineFunctions always
	run DefineStimuli always
	run InitTobii always
	run exp_seq always

define loop experiment2alertingorienting
	set source_file ""
	set source table
	set repeat 14
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 y_pos1 250
	setcycle 0 x_pos1 600
	setcycle 0 cue_xpos 500
	setcycle 0 cue_ypos 200
	setcycle 0 wcue_xpos -500
	setcycle 0 wcue_ypos 200
	setcycle 1 y_pos1 250
	setcycle 1 x_pos1 -600
	setcycle 1 cue_xpos -500
	setcycle 1 cue_ypos 200
	setcycle 1 wcue_xpos 500
	setcycle 1 wcue_ypos 200
	setcycle 2 y_pos1 -250
	setcycle 2 x_pos1 600
	setcycle 2 cue_xpos 500
	setcycle 2 cue_ypos -200
	setcycle 2 wcue_xpos -500
	setcycle 2 wcue_ypos 200
	setcycle 3 y_pos1 -250
	setcycle 3 x_pos1 -600
	setcycle 3 cue_xpos -500
	setcycle 3 cue_ypos -200
	setcycle 3 wcue_xpos 500
	setcycle 3 wcue_ypos 200
	setcycle 4 y_pos1 475
	setcycle 4 x_pos1 800
	setcycle 4 cue_xpos 700
	setcycle 4 cue_ypos 400
	setcycle 4 wcue_xpos -700
	setcycle 4 wcue_ypos 400
	setcycle 5 y_pos1 475
	setcycle 5 x_pos1 -800
	setcycle 5 cue_xpos -700
	setcycle 5 cue_ypos 400
	setcycle 5 wcue_xpos 700
	setcycle 5 wcue_ypos 400
	setcycle 6 y_pos1 -475
	setcycle 6 x_pos1 800
	setcycle 6 cue_xpos 700
	setcycle 6 cue_ypos -400
	setcycle 6 wcue_xpos -700
	setcycle 6 wcue_ypos -400
	setcycle 7 y_pos1 -475
	setcycle 7 x_pos1 -800
	setcycle 7 cue_xpos -700
	setcycle 7 cue_ypos -400
	setcycle 7 wcue_xpos 700
	setcycle 7 wcue_ypos 400
	run trial_sequence_experiment2

define feedback feedback_1_1
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#3c6803" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=always text="Je nauwkeurigheid was [accuracy_total]%" x=0 y=-182 z_index=0
	draw textline center=1 color="#3c6803" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=always text="Je gemiddelde reactietijd was [responseTime_Average] ms" x=14 y=-134 z_index=0
	draw textline center=1 color="#3c6803" font_bold=no font_family=mono font_italic=yes font_size=24 html=yes show_if=always text="Druk op een toets om door te gaan" x=0 y=200 z_index=0

define sketchpad goodbye
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="grass.png" scale=0.9999999999999988 show_if=always x=0 y=-192 z_index=0
	draw image center=1 file="sky.png" scale=2.5 show_if=always x=0 y=-512 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Dankjewel voor het spelen!!<br /> <br /> <br />  Doei doei" x=0 y=-300 z_index=0
	draw image center=1 file="smiley_wave-512.png" scale=0.9 show_if=always x=0 y=100 z_index=0

define logger log_exp2
	set description "Logs experimental data"
	set auto_log no
	log resRate1
	log trial_cnt1
	log responseTime1
	log x_pos1
	log y_pos1
	log responseTime_Average
	log eyes_coordinates
	log target_coordinates
	log responseKey1
	log accuracy_total
	log correct_response
	log response_rate
	log accuracy1
	log con
	log cue_xpos
	log cue_ypos
	log wcue_xpos
	log wcue_ypos
	log cuewrong
	log cueright
	log nocue

define inline_script new_inline_script_2
	set description "Executes Python code"
	___run__
	# to do:
	
	#set initTobii on tobii
	#check startProcedure works and shows the same messages 
	# change images path
	# if Recalibration does not work try to put it before set_variables_practise
	#remove comments from set_variable_practise for the joystick
	#in PractiseTrial reput the joystick option
	#remove comments from QuitPyGame
	#in practise_stimuli put trial_cnt >30
	
	
	
	#pygaze calibration at the beginning of tobii log  file:
	#all the time the same (both with tobii nano and x2), what changes is samplerate, sampletime, accuracy in pixels, precision. 
	
	#TTime.dll. This function extracts timing information from a high resolution counter located on the computer or eye tracker processor. The TET Server then recalculates this timestamp in order to show the time when the image was captured by the sensor. 
	
	#A time stamp in the Tobii Pro SDK is a value that indicates the time when the information used to produce the gaze data was sampled by the eye tracker. The value should be interpreted as a time interval in microseconds measured from an arbitrary point in time. In the Pro SDK there are two kinds of time stamps: device time stamp and system time stamp. The source of the device time stamp is the internal clock in the eye tracker hardware while the system time stamp uses the computer on which the application is running as the source. Time stamps in the Pro SDK are generally given in microseconds.
	#If you want to measure the latency of any of the data streams, this can be done by comparing the system time stamp of the received data with the time stamp returned by the "Get System Time Stamp" method (check reference guide for corresponding language binding for exact signature of method). Please note that the latency may change from data sample to data sample, and that some eye trackers will have greater latency when tracking fails (i.e. when validity of data is invalid)
	
	
	#The Tobii Pro SDK is used for synchronisation between the game and the eye-tracker since it automatically synchronizes the clocks of these components. The synchronisation between the eye-tracker and EEG data is established via timestamps. At the appearance of a stimulus, a short message is logged in the eye-tracker data. At the same time, a General Purpose Input/Output (GPIO) sends a pulse to the MicroMed workstation, which appears as a digital trigger in the data.
	
	
	# A drift correction therefore can be used for two purposes: It can be a test to confirm whether the calibration is still valid – you cannot run the trial without completing a drift correct successfully, it will not trigger if the participants’ eye is not on the drift correct.It can function as a “fixation dot” (more commonly seen in non-eye tracking research as a cross) for the participant to look at so that they always start the trial in the same place (the centre).
	__end__
	set _prepare ""

define loop practice2alertingorienting
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 7
	set continuous no
	set break_if_on_first yes
	set break_if "[triial]>5"
	setcycle 0 y_pos1 250
	setcycle 0 x_pos1 -600
	setcycle 0 cue_xpos -500
	setcycle 0 cue_ypos 200
	setcycle 0 wcue_xpos 500
	setcycle 0 wcue_ypos 100
	setcycle 1 y_pos1 -250
	setcycle 1 x_pos1 600
	setcycle 1 cue_xpos 500
	setcycle 1 cue_ypos -200
	setcycle 1 wcue_xpos 300
	setcycle 1 wcue_ypos 100
	setcycle 2 y_pos1 -250
	setcycle 2 x_pos1 -600
	setcycle 2 cue_xpos -500
	setcycle 2 cue_ypos -200
	setcycle 2 wcue_xpos 800
	setcycle 2 wcue_ypos 5
	setcycle 3 y_pos1 475
	setcycle 3 x_pos1 800
	setcycle 3 cue_xpos 700
	setcycle 3 cue_ypos 400
	setcycle 3 wcue_xpos -800
	setcycle 3 wcue_ypos 200
	setcycle 4 y_pos1 475
	setcycle 4 x_pos1 -800
	setcycle 4 cue_xpos -700
	setcycle 4 cue_ypos 400
	setcycle 4 wcue_xpos 100
	setcycle 4 wcue_ypos 100
	setcycle 5 y_pos1 -475
	setcycle 5 x_pos1 800
	setcycle 5 cue_xpos 700
	setcycle 5 cue_ypos -400
	setcycle 5 wcue_xpos -100
	setcycle 5 wcue_ypos -100
	setcycle 6 y_pos1 -475
	setcycle 6 x_pos1 -800
	setcycle 6 cue_xpos -700
	setcycle 6 cue_ypos -400
	setcycle 6 wcue_xpos 500
	setcycle 6 wcue_ypos 150
	run trial_sequence_practice2

define inline_script practicealertingorienting
	set description "Executes Python code"
	___run__
	
	
	# reset time of trial
	trialClock.reset()
	
	# show black screen with fixationcross
	while trialClock.getTime() < var.timeran:
	    drawbackground()
	
	# reset all variables
	reset()
	xboxEvent1 =[]
	q=0
	t = 0 
	XboxClock.reset()
	
	# show stimuli and get button press
	while trialClock.getTime() < 5:
	     xboxEvent1 = pygame.event.get()
	    
	     if xboxEvent1:
	       event1 = xboxEvent1[0]
	       if event1.type == 1539:
	          if event1.button == 3:
	             pygame.quit()
	             exp.pause() 
	             pygame.init()
	             gamepad = pygame.joystick.Joystick(0)
	             gamepad.init()
	             break
	          var.responseKey1 = event1.button
	          var.responseTime1 = (XboxClock.getTime())*1000
	          break
	    
	     if q == 0: 
	
	       var.con= random.choice(var.conditions)
	       a=  random.choice(var.funct)
	       b = random.choice(var.funct[:2])
	       if var.con == 'alert':  
	          if a == var.funct[0]:
	              drawCue_wrong()
	              clock.sleep(800) 
	          elif a == var.funct[1]:
	              drawCue_right()
	              clock.sleep(800) 
	          elif a == var.funct[2]:
	              drawbackground1()
	              clock.sleep(800)
	       elif var.con == 'orient':      
	            if b == var.funct[0]:
	               drawCue_wrong()
	               clock.sleep(800)
	            elif b == var.funct[1]:
	               drawCue_right()
	               clock.sleep(800)
	       q = 1 
	       
	     if t==0:
	        drawbackground() 
	        clock.sleep(1100)
	        t=1
	     
	     drawCorner1()          
	        
	
	#feedback correct
	if var.responseKey1 == var.correct_response:
	    ImgBackBack.draw()
	    TextStim1.draw()
	    win.flip() 
	    clock.sleep(1000)
	    
	        
	#feedback incorrect  
	elif var.responseKey1 != var.correct_response or (var.responseTime1 != 0 and var.responseKey1 != var.correct_response):
	    ImgBackBack.draw()
	    TextStim2.draw()
	    win.flip()  
	    clock.sleep(1000)
	
	
	
	var.triial += 1
	__end__
	___prepare__
	import random
	
	var.timeran = random.randint(1,2)
	Emojiez = [path + "LeftHand.png", path + "RightHand.png", path + "emo.png"]
	
	### random choice between left/right hand emoji
	ImgEmojies = visual.ImageStim(win,
	                           image=random.choice(Emojiez),
	                           pos=(var.x_pos1,var.y_pos1),
	                           size=(100,80),
	                           units="pix" )
	
	if ImgEmojies.image == Emojiez[0]:
	     var.correct_response = 4
	elif ImgEmojies.image == Emojiez[1]:
	     var.correct_response =5
	elif ImgEmojies.image == Emojiez[2]:
	     var.correct_response = None
	
	
	
	var.conditions = ['alert', 'orient']
	    
	
	var.funct= [drawCue_wrong, drawCue_right, drawbackground]
	
	Cueright = visual.Circle(win,
	    units="pix",
	    radius=1*20,
	    fillColor="white",
	    pos = (var.cue_xpos,var.cue_ypos),
	    size=(1,1))
	
	Cuewrong = visual.Circle(win,
	    units="pix",
	    radius=1*20,
	    fillColor="white",
	    pos = (var.wcue_xpos,var.wcue_ypos),
	    size=(1,1))
	__end__

define pygaze_log pygaze_log_1_5
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define inline_script set_variables_exp2
	set description "Executes Python code"
	___run__
	import pygame
	pygame.init()
	gamepad = pygame.joystick.Joystick(0)
	gamepad.init()
	
	eyetracker.start_recording()
	
	var.trial_cnt1 = 0
	var.accuracy1 = 0
	var.responseTime1 = 0 
	#Pre allocate variables for: avg. responsetime, accuracy and response rate
	
	[var.responseTime_sum, var.resRate1, var.responseTime_Average, var.accuracy_total] = (0,0,0,0)
	
	
	
	[var.cuewrong,var.cueright,var.nocue]  = (0,0,0) 
	__end__
	___prepare__
	##For the gamepad
	
	#Preallocate trial_cnt and distracotrs count.
	__end__

define inline_script setvar_practice2
	set description "Executes Python code"
	___run__
	win.callOnFlip(eyetracker.log,'Start practice2 ')
	var.triial = 0
	import pygame
	pygame.init()
	gamepad = pygame.joystick.Joystick(0)
	gamepad.init()
	__end__
	___prepare__
	##For the gamepad
	
	#Preallocate trial_cnt and distracotrs count.
	__end__

define inline_script stimulialertingorienting
	set description "Executes Python code"
	___run__
	
	win.callOnFlip(eyetracker.log,'Start trial {}'.format(var.trial_cnt1+1))
	
	# reset time of trial
	trialClock.reset()
	
	# show black screen with fixationcross
	while trialClock.getTime() < var.timeran:
	    drawbackground()
	
	# reset all variables
	reset()
	xboxEvent1 =[]
	q=0
	t=0
	z = 0
	zz = 0
	XboxClock.reset()
	# show stimuli and get button press
	while trialClock.getTime() < 4:
	    xboxEvent1 = pygame.event.get()
	    if xboxEvent1:
	       event1 = xboxEvent1[0] 
	       print(event1)
	       if event1.type ==1539:
	           if event1.button == 3: #Y
	              pygame.quit()
	              exp.pause() 
	              pygame.init()
	              gamepad = pygame.joystick.Joystick(0)
	              gamepad.init()
	              break
	           var.responseTime1 = (XboxClock.getTime())*1000 #core.clock.getTime()from s to ms
	           eyetracker.log('Stimulus OUT trial {}'.format(var.trial_cnt1+1))
	           eyetracker.log('RT is {}'.format(var.var.responseTime1)) # do not use win.CallOnflip because it waits for refresh rate (i.e. causing time delay)
	           var.responseKey1 = event1.button
	           var.resRate1 += 1 #if they respond
	           break
	    
	    
	
	# save stimulus appearance in tobii logfile + send triggers via gpio
	    if z == 0: 
	
	       var.con= random.choice(var.conditions)
	       a=  random.choice(var.funct)
	       b = random.choice(var.funct[:2])
	       if var.con == 'alert':  
	          if a == var.funct[0]:
	              if t==0: 
	                 eyetracker.log('CueIN trial {}'.format(var.trial_cnt1+1))
	                 t=1
	              drawCue_wrong()
	              var.cuewrong = 1
	              var.cueright = 0
	              var.nocue = 0
	              clock.sleep(700)
	          elif a == var.funct[1]:
	              if t==0: 
	                 eyetracker.log('CueIN trial {}'.format(var.trial_cnt1+1))
	                 t=1
	              drawCue_right()
	              var.cuewrong = 0
	              var.cueright = 1
	              var.nocue = 0
	              clock.sleep(700)
	          elif a == var.funct[2]:
	              drawbackground1()
	              var.cuewrong = 0
	              var.cueright = 0
	              var.nocue = 1
	              clock.sleep(700)
	       elif var.con == 'orient':      
	            if b == var.funct[0]:
	               if t==0: 
	                 eyetracker.log('CueIN trial {}'.format(var.trial_cnt1+1))
	                 t=1
	               drawCue_wrong()
	               var.cuewrong = 1
	               var.cueright = 0
	               var.nocue = 0
	               clock.sleep(700)
	            elif b == var.funct[1]:
	               if t==0: 
	                 eyetracker.log('CueIN trial {}'.format(var.trial_cnt1+1))
	                 t=1
	               drawCue_right()
	               var.cuewrong = 0
	               var.cueright = 1
	               var.nocue = 0
	               clock.sleep(700)
	       z = 1 
	    if zz==0:
	        drawbackground() 
	        clock.sleep(1100)
	        zz=1
	       
	    if q==0: 
	       eyetracker.log('StimulusIN trial {}'.format(var.trial_cnt1+1))
	       XboxClock.reset()
	       triggerClock.reset()
	       SerTrigger()
	       q=1
	       
	       #trigger delay between trigger and stim appearance is 0.1 ms so it is ok 
	   
	    drawCorner1() 
	   # if clock.once_in_a_while(ms=100):
	      #  x, y = eyetracker.sample() #Get an eye-position sample from the eye tracker.
	       # gxy, ps, sample = eyetracking.sample() # get gaze coordinates, pupil size, and sample
	    
	        #correct for tobii cordinates 
	      #  x -= var.width // 2 
	      
	        #y -= var.height // 2
	      
	        #x = int(x)
	      #  y =int(-y)
	        
	        #check coordinates (based on OS) for target and eyes
	var.target_coordinates = (var.x_pos1,var.y_pos1)
	        #var.eyes_coordinates = (x,y)
	        
	      #  if z==0:
	       #    if (-90 >= x or x >= 90) and (-90 >=  y or y >= 90):
	      #       if zz ==0:
	      #          var.orora1 = trialClock.getTime()
	      #          zz=1
	      #          z=1
	                
	                
	     #   if var.x_pos1-var.xmin_calib <= x <=var.x_pos1+var.xmax_calib  and var.y_pos1-var.ymin_calib <= y <= var.y_pos1+var.ymax_calib: #drift correction. 
	        #if var.target_coordinates  == var.eyes_coordinates:
	          #  var.on_target = 1
	          #  if t == 0:
	         #      eyetracker.log('On target!')
	         #      t = 1
	     #   else:
	     #       var.on_target = 0
	        
	        
	if not xboxEvent1:
	    eyetracker.log('Stimulus OUT trial {}'.format(var.trial_cnt1+1))
	
	if var.correct_response == None and var.responseKey1 == var.correct_response:
	    var.resRate1 += 1
	#feedback correct
	if var.responseKey1 == var.correct_response:
	    ImgBackBack.draw()
	    TextStim1.draw()
	    win.flip() 
	    clock.sleep(1000)
	    var.accuracy1 += 1
	    
	        
	#feedback incorrect  
	elif var.responseKey1 != var.correct_response or (var.responseTime1 != 0 and var.responseKey1 != var.correct_response):
	    ImgBackBack.draw()
	    TextStim2.draw()
	    win.flip()  
	    clock.sleep(1000)
	    
	#Update variables
	var.trial_cnt1 +=1 
	
	
	var.responseTime_sum += var.responseTime1#### RESPONSE TIME IS FROM THE SECOND FIX CROSS TO BUTTON PRESS
	
	
	### Logging ###
	if var.correct_response == None and var.responseKey1 == var.correct_response:
	    var.responseTime_Average = var.responseTime_Average
	else:
	    var.responseTime_Average = round(var.responseTime_sum/var.trial_cnt1)
	    
	var.accuracy_total = round((var.accuracy1/var.trial_cnt1)*100)
	var.response_rate = round((var.resRate1/var.trial_cnt1)*100)
	__end__
	___prepare__
	import random
	
	var.timeran = random.randint(1,2)
	Emojiez = [path + "LeftHand.png", path + "RightHand.png"]
	var.target_coordinates = (0,0)
	var.eyes_coordinates = (0,0)
	### random choice between left/right hand emoji
	if var.trial_cnt1 == 5 or var.trial_cnt1 == 10 or var.trial_cnt1 == 15 or var.trial_cnt1 == 45 or var.trial_cnt1 == 65 or var.trial_cnt1 == 85 or var.trial_cnt1 == 59 or var.trial_cnt1 == 105 or var.trial_cnt1 == 75:
	   ImgEmojies = visual.ImageStim(win,
	                           image=path + "emo.png",
	                           pos=(var.x_pos1,var.y_pos1),
	                           size=(100,80),
	                           units="pix" )
	else:
	   ImgEmojies = visual.ImageStim(win,
	                           image=random.choice(Emojiez),
	                           pos=(var.x_pos1,var.y_pos1),
	                           size=(100,80),
	                           units="pix" )
	
	if ImgEmojies.image == Emojiez[0]:
	     var.correct_response = 4
	elif ImgEmojies.image == Emojiez[1]:
	     var.correct_response =5
	elif ImgEmojies.image == path + "emo.png":
	     var.correct_response = None
	
	
	
	var.conditions = ['alert', 'orient']
	
	
	       
	
	var.funct= [drawCue_wrong, drawCue_right, drawbackground]
	
	Cueright = visual.Circle(win,
	    units="pix",
	    radius=1*20,
	    fillColor="white",
	    pos = (var.cue_xpos,var.cue_ypos),
	    size=(1,1))
	
	Cuewrong = visual.Circle(win,
	    units="pix",
	    radius=1*20,
	    fillColor="white",
	    pos = (var.wcue_xpos,var.wcue_ypos),
	    size=(1,1))
	__end__

define sequence trial_sequence_experiment2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run stimulialertingorienting always
	run log_exp2 always

define sequence trial_sequence_practice2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run practicealertingorienting always

define form_text_display uitleg
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text OK
	set margins "50;50;50;50"
	set form_title "Instructies 1/2"
	__form_text__
	
	
	
	                         We gaan een spelletje spelen, dat je reactiesnelheid en je aandacht kan meten
	
	                   Het enige wat je hoeft te doen, is te kijken naar de objecten die op het scherm verschijnen.
	                   Je ziet een oranje kruis in het midden van het scherm, daarna een witte stip en dan een aap met twee handen die de ogen bedekken. 
	
	                         Probeer je te fixeren op deze objecten!
	
	     Klik op OK om een voorbeeld te zien
	__end__
	set font 160
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display uitleg_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Oefenen
	set margins "50;50;50;50"
	set form_title "Instructies 2/2"
	__form_text__
	                         Als beide handen van de aap bruin zijn, hoeft jij op geen enkele knop op de joystick te drukken.                
	
	                         Als een van de twee handen zwart is, moet jij de game controller gebruiken. 
	                         Als de zwarte hand aan jouw linkerhand is, drukt je op de linkerknop op de achterkant van de game controller(LB). 
	                         Als de zwarte hand aan jouw rechterkant is, drukt je op de de rechterknop op de achterkant van de game controller(RB).
	
	                         Wanneer de aap verschijnt, beweeg je je ogen van het fixatiekruis naar de aap. 
	                         Dan druk je op de juiste knop.
	
	
	                                        We gaan eerst even oefenen voordat we echt beginnen!
	                                                
	                                                
	                                                Klik op "Oefen" om met de oefening te starten
	__end__
	set font 60
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display uitleg_1_2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text OK
	set margins "50;50;50;50"
	set form_title Instructies
	__form_text__
	
	
	
	                         Daarna zie je mogelijk een witte stip. Kijk naar de witte stip.
	                         Daarna komt het fixatiekruis weer tevoorschijn, fixeer er weer op.
	                         
	                         
	                         Later, zie je een AAP op het scherm. De AAP heeft twee handen die de ogen bedekken. 
	                         Als beide handen bruin zijn, hoeft jij op geen enkele knop op de joystick te drukken.                
	                         Fixeer je gewoon op de aap!
	                         
	                         
	                         
	      Klik op OK om een voorbeeld te zien
	                    
	                         
	                        
	
	
	
	                                
	__end__
	set font 40
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display uitleg_2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Oefen
	set margins "50;50;50;50"
	set form_title Instructies
	__form_text__
	
	
	
	                         Als de zwarte hand aan jouw linkerhand is, drukt je op de linkerknop op de achterkant van de joystick(RB). 
	                         Als de zwarte hand aan jouw rechterkant is, drukt je op de de rechterknop op de achterkant van de joystick(LB).
	                         
	                         Wanneer de aap verschijnt, beweeg je je ogen van het fixatiekruis naar de aap. 
	                         Dan druk je op de juiste knop.
	     
	                       
	                       
	                       
	                       
	                                                We gaan eerst even oefenen voordat we echt beginnen!
	                                                
	                                                
	                                                Klik op "Oefen" om met de oefening te starten
	
	
	
	                                
	__end__
	set font 40
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display uitleg_2_2_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text START
	set margins "50;50;50;50"
	set form_title Instructies
	__form_text__
	
	
	
	                                                                        Goed gedaan. 
	                         
	                         De oefening is voorbij. 
	                         Als je klaar bent, klik je op START om het echte spel te starten
	                                                
	                                              
	
	
	
	                                
	__end__
	set font 40
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="grass.png" scale=1 show_if=always x=-4 y=-151 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Welkom!<br />Dankjewel dat je wilt meedoen!" x=0 y=-300 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=38 html=yes show_if=always text="Druk op een toets als je klaar bent om te beginnen" x=0 y=300 z_index=0
	draw image center=1 file="Mr._Smiley_Face.svg.png" scale=0.6 show_if=always x=32 y=16 z_index=0
	draw image center=1 file="sky.png" scale=2.5 show_if=always x=32 y=-480 z_index=0

